<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p2="clr-namespace:Bonsai.Mixer;assembly=Bonsai.Mixer"
                 xmlns:p3="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p4="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:p5="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:p6="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>MetaData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>HardwareDevices</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>BehaviorBoards</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:DeviceBehaviorBoard.BehaviorBoard.bonsai">
                          <CommandsSubjectName>Behavior1Commands</CommandsSubjectName>
                          <PortName>COM3</PortName>
                          <DumpRegisters>true</DumpRegisters>
                          <Heartbeat>Enabled</Heartbeat>
                          <EventsSubjectName>Behavior1Events</EventsSubjectName>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:DeviceBehaviorBoard.BehaviorBoard.bonsai">
                          <CommandsSubjectName>Behavior2Commands</CommandsSubjectName>
                          <PortName>COMx</PortName>
                          <DumpRegisters>true</DumpRegisters>
                          <Heartbeat>Enabled</Heartbeat>
                          <EventsSubjectName>Behavior2Events</EventsSubjectName>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:DeviceBehaviorBoard.CameraTriggerController.bonsai">
                          <TriggerFrequency>30</TriggerFrequency>
                          <BehaviorCommandsSubjectName>Behavior1Commands</BehaviorCommandsSubjectName>
                          <BehaviorEventsSubjectName>Behavior1Events</BehaviorEventsSubjectName>
                          <CameraTriggerEventsSubjectName>CameraTriggerEvents</CameraTriggerEventsSubjectName>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:DeviceBehaviorBoard.PulseController.bonsai">
                          <BehaviorCommandsSubjectName>Behavior1Commands</BehaviorCommandsSubjectName>
                          <OutputPulseEnable>DO1 DO2 DO3</OutputPulseEnable>
                          <PulseDO1>33</PulseDO1>
                          <PulseDO2>33</PulseDO2>
                          <PulseDO3>1</PulseDO3>
                          <BehaviorEventsSubjectName>Behavior1Events</BehaviorEventsSubjectName>
                          <TriggerPulseSubjectName>TriggerValve</TriggerPulseSubjectName>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:DeviceBehaviorBoard.Timestamps.bonsai">
                          <EventsSubjectName>Behavior1Events</EventsSubjectName>
                          <CommandsSubjectName>Behavior1Commands</CommandsSubjectName>
                        </Expression>
                        <Expression xsi:type="Annotation">
                          <Name>Add to acquisiton package</Name>
                          <Text><![CDATA[]]></Text>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="C:\dev\ucl-open\acquisition\src\UclOpen.Devices\RunningWheel.bonsai">
                          <CommandsSubjectName>Behavior1Commands</CommandsSubjectName>
                          <EventsSubjectName>Behavior1Events</EventsSubjectName>
                          <CountsPerRev>4096</CountsPerRev>
                          <WheelDiameter_mm>170</WheelDiameter_mm>
                          <Name>WheelDistanceCm</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>LicketySplits</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="IncludeWorkflow" Path="C:\dev\ucl-open\acquisition\src\UclOpen.Devices\LicketySplit.bonsai">
                          <CommandsSubjectName>LickCommandsLeft</CommandsSubjectName>
                          <PortName>COM4</PortName>
                          <DumpRegisters>true</DumpRegisters>
                          <Heartbeat>Disabled</Heartbeat>
                          <EventsSubjectName>LickEventsLeft</EventsSubjectName>
                          <Channel0TriggerThreshold>0</Channel0TriggerThreshold>
                          <Channel0UntriggerThreshold>0</Channel0UntriggerThreshold>
                          <LickStateSubjectName>LickStateLeft</LickStateSubjectName>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="C:\dev\ucl-open\acquisition\src\UclOpen.Devices\LicketySplit.bonsai">
                          <CommandsSubjectName>LickCommandsRight</CommandsSubjectName>
                          <PortName>COM4</PortName>
                          <DumpRegisters>true</DumpRegisters>
                          <Heartbeat>Disabled</Heartbeat>
                          <EventsSubjectName>LickEventsRight</EventsSubjectName>
                          <Channel0TriggerThreshold>0</Channel0TriggerThreshold>
                          <Channel0UntriggerThreshold>0</Channel0UntriggerThreshold>
                          <LickStateSubjectName>LickStateRight</LickStateSubjectName>
                        </Expression>
                      </Nodes>
                      <Edges />
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Cameras</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="IncludeWorkflow" Path="C:\dev\ucl-open\acquisition\src\UclOpen.Devices\TriggeredCameraAcquisition.bonsai">
                          <ExposureTime>19000</ExposureTime>
                          <Gain>0</Gain>
                          <Binning>1</Binning>
                          <SerialNumber xsi:nil="true" />
                          <ColorProcessing>Default</ColorProcessing>
                          <CameraTriggerEventsSubjectName>CameraTriggerEvents</CameraTriggerEventsSubjectName>
                          <FrameEventsSubjectName>FrameEvents1</FrameEventsSubjectName>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="C:\dev\ucl-open\acquisition\src\UclOpen.Devices\TriggeredCameraAcquisition.bonsai">
                          <ExposureTime>19000</ExposureTime>
                          <Gain>0</Gain>
                          <Binning>1</Binning>
                          <SerialNumber xsi:nil="true" />
                          <ColorProcessing>Default</ColorProcessing>
                          <CameraTriggerEventsSubjectName>CameraTriggerEvents</CameraTriggerEventsSubjectName>
                          <FrameEventsSubjectName>FrameEvents2</FrameEventsSubjectName>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="C:\dev\ucl-open\acquisition\src\UclOpen.Devices\TriggeredCameraAcquisition.bonsai">
                          <ExposureTime>19000</ExposureTime>
                          <Gain>0</Gain>
                          <Binning>1</Binning>
                          <SerialNumber xsi:nil="true" />
                          <ColorProcessing>Default</ColorProcessing>
                          <CameraTriggerEventsSubjectName>CameraTriggerEvents</CameraTriggerEventsSubjectName>
                          <FrameEventsSubjectName>FrameEvents3</FrameEventsSubjectName>
                        </Expression>
                      </Nodes>
                      <Edges />
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="GroupWorkflow">
                      <Name>StepperMotors</Name>
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                    </Builder>
                  </Expression>
                </Nodes>
                <Edges />
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>BonvisionResources</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>AudioStimProcessing</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>OptoTrigger</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>Audio</Name>
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              </Builder>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>